PsychoPy2experiment version="3.0.5"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 3.0.5
  Window size (pixels) = [1280, 800]
  expName = decision_lexica_visual
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Routines
  Routine instrucciones
    KeyboardComponent start_LexEsp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent lexEsp_Instr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This test consists of 90 trials, in each of which you will see a string letters.
        Your task is to decide whether this is an existing Spanish word or not.
        If you think it is an existing Spanish word, press 's' for 'yes' and if you think it is not an existing Spanish word, press 'n' for 'no'.
        If you are sure that the word exists, even if you don't know its exact meaning, you may still respond 'yes'.
        But if you are not sure if it is an existing word, you should respond 'no'.
        You have as much time as you like for each decision.
        Press space bar to start.
  Routine cierre
    TextComponent text_Closing
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = gracias
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      store = nothing
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  Routine pruebas
    TextComponent text_Word
      letterHeight = 0.2
      startVal [frame N] = 61
      text [set every repeat] = $Word
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    TextComponent text_Si
      color = green
      letterHeight = 0.2
      pos = [-0.5, -.5]
      startVal [frame N] = 61
      text = sí
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    TextComponent text_No
      color = red
      letterHeight = 0.2
      pos = [0.5, -.5]
      startVal [frame N] = 61
      text = no
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    KeyboardComponent lexEsp_key_resp
      allowedKeys = '0','1'
      correctAns = $corrAnsLexical
      discard previous = False
      forceEndRoutine = True
      startVal [frame N] = 61
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
    TextComponent text_Mask
      letterHeight = 0.2
      startVal [frame N] = 0
      stopVal [duration (frames)] = 30
      text [set every repeat] = $Mask
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    TextComponent text_Prime
      letterHeight = 0.2
      startVal [frame N] = 31
      stopVal [duration (frames)] = 30
      text [set every repeat] = $Prime
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Flow
  Routine instrucciones
  LoopInitiator ciclo loopType="TrialHandler"
    conditionsFile = LexicalAccess.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Mask', '######'), ('Prime', 'ba####'), ('Word', 'barato'), ('Translation', 'cheap'), ('corrAnsLexical', 1)]),
      OrderedDict([('Mask', '########'), ('Prime', 'ba######'), ('Word', 'batillón'), ('Translation', 'NW'), ('corrAnsLexical', 0)]),
      OrderedDict([('Mask', '#####'), ('Prime', 'be###'), ('Word', 'besar'), ('Translation', 'kiss'), ('corrAnsLexical', 1)]),
      OrderedDict([('Mask', '#######'), ('Prime', 'bi#####'), ('Word', 'bisagra'), ('Translation', 'hinge'), ('corrAnsLexical', 1)]),
      OrderedDict([('Mask', '########'), ('Prime', 'bi######'), ('Word', 'bizcocho'), ('Translation', 'cake'), ('corrAnsLexical', 1)]),
      OrderedDict([('Mask', '#######'), ('Prime', 'ca#####'), ('Word', 'cabello'), ('Translation', 'hair'), ('corrAnsLexical', 1)]),
      OrderedDict([('Mask', '#######'), ('Prime', 'ca#####'), ('Word', 'cadallo'), ('Translation', 'NW'), ('corrAnsLexical', 0)]),
      OrderedDict([('Mask', '######'), ('Prime', 'ca####'), ('Word', 'cadeña'), ('Translation', 'NW'), ('corrAnsLexical', 0)]),
      OrderedDict([('Mask', '######'), ('Prime', 'ca####'), ('Word', 'camisa'), ('Translation', 'shirt'), ('corrAnsLexical', 1)]),
      OrderedDict([('Mask', '#######'), ('Prime', 'ca#####'), ('Word', 'candado'), ('Translation', 'padlock'), ('corrAnsLexical', 1)]),
      OrderedDict([('Mask', '######'), ('Prime', 'ca####'), ('Word', 'canela'), ('Translation', 'cinnamon'), ('corrAnsLexical', 1)]),
      OrderedDict([('Mask', '#######'), ('Prime', 'ca#####'), ('Word', 'capillo'), ('Translation', 'NW'), ('corrAnsLexical', 0)])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
    Routine pruebas
  LoopTerminator ciclo
  Routine cierre
