PsychoPy2experiment version="3.0.5"
Settings
  Data filename = u'data/original_data/part_files/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName)
  Experiment info = {'participant': 'part001', 'session': 'A', 'Name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 3.0.5
  Window size (pixels) = [1280, 800]
  expName = Syllabification
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        carrierPrac = practice + "%i" %pracTarLoop.thisN
    TextComponent pracCarrier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $eval(carrierPrac)
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    KeyboardComponent prac_key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = nothing
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  Routine pracIns
    TextComponent initialIns
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Usted va a completar un experimento.

        Va a ver un target

        Después, verá otras palabras.

        Si ve el target, presione el botón 'y'.

        Si no ve el target, no haga nada.

        Presione 'la barra' para empezar las pruebas de práctica.
    KeyboardComponent startPrac
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine target
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        if expInfo['session'] == 'A':
            conditionPrac="data/processed_data/exp_files/pracCondA.csv"
            conditionExp="data/processed_data/exp_files/expCondA.csv"
            conditionSylPrac="data/processed_data/exp_files/sylprac.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondA.csv"
            practice = "practiceListA"
            experiment = "stimuliListA"
        elif expInfo['session'] == 'B':
            conditionPrac="data/processed_data/exp_files/pracCondB.csv"
            conditionExp="data/processed_data/exp_files/expCondB.csv"
            conditionSylPrac="data/processed_data/exp_files/sylprac.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondB.csv"
            practice = "practiceListB"
            experiment = "stimuliListB"
        elif expInfo['session'] == 'C':
            conditionPrac="data/processed_data/exp_files/pracCondC.csv"
            conditionExp="data/processed_data/exp_files/expCondC.csv"
            conditionSylPrac="data/processed_data/exp_files/sylprac.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondC.csv"
            practice = "practiceListC"
            experiment = "stimuliListC"
        else:
            conditionPrac="data/processed_data/exp_files/pracCondD.csv"
            conditionExp="data/processed_data/exp_files/expCondD.csv"
            conditionSylPrac="data/processed_data/exp_files/sylprac.csv"
            conditionSylExp="data/processed_data/exp_files/sylexpCondD.csv"
            practice = "practiceListD"
            experiment = "stimuliListD"
      Begin Routine:
        targetPrac = practice + "%i" %pracTarLoop.thisN
    TextComponent pracTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        "Encuentre    " + $eval(targetPrac)
  Routine expIns
    TextComponent startExp
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Usted acaba de completar las pruebas.

        Recuerde:
        Si ve el target, presione el botón 'y'.

        Si no ve el target, no haga nada.


        Presione 'la barra' para empezar el experimento.
    KeyboardComponent startExpTrials
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ISI
    TextComponent interstimulibr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine targetExp
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        targetExp= experiment + "%i" %expTarLoop.thisN
    TextComponent expTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = "Encuentre    " + $eval(targetExp)
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  Routine trialExp
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        carrierExp= experiment + "%i" %expTarLoop.thisN
    TextComponent expCarrier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $eval(carrierExp)
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    KeyboardComponent seg_key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine thankYou
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = ¡Muchas Gracias!
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  Routine trialSyllable
    TextComponent AnswerCVC
      letterHeight = 0.1
      pos = (-.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCVC
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    TextComponent AnswerCV
      letterHeight = 0.1
      pos = (.5,0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCV
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    TextComponent Syllable_Target
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $syllabification
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    KeyboardComponent syl_key_resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine syllableExpIns
    TextComponent SyllableExpInsText
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Ahora, verá varias palabras y selecionará la primera sílaba.

        Recuerde:
        Presione '1' si su respuesta está a la izqueirda.

        Presione '2' si su respuesta está a la derecha.

        Presione 'la barra' para empezar el experimento.
    KeyboardComponent sylExpStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine syllablePracIns
    TextComponent instructionSyl
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Ahora, verá varias palabras y selecionará la primera sílaba.

        Presione '1' si su respuesta está a la izqueirda.

        Presione '2' si su respuesta está a la derecha.

        Presione 'la barra' para empezar las pruebas de práctica.
    KeyboardComponent sylPracStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine syllablePracTrial
    TextComponent PracSylTarget
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $syllabification
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    TextComponent PracSylAnsCVC
      letterHeight = 0.1
      pos = (-.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCVC
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    TextComponent PracSylAnsCV
      letterHeight = 0.1
      pos = (.5, 0)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $keyCV
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    KeyboardComponent sylPrac_key_resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      store = nothing
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Flow
  Routine pracIns
  LoopInitiator pracTarLoop loopType="TrialHandler"
    Selected rows = $[1]
    conditionsFile = $conditionPrac
    loopType = sequential
    nReps = 8
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    Routine target
    LoopInitiator pracTrialLoop loopType="TrialHandler"
      Selected rows = $[2,3,4,5,6,7,8,9,10,11]
      conditionsFile = $conditionPrac
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator pracTrialLoop
  LoopTerminator pracTarLoop
  Routine expIns
  LoopInitiator expTarLoop loopType="TrialHandler"
    Selected rows = $[1]
    conditionsFile = $conditionExp
    loopType = sequential
    nReps = 48
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    Routine targetExp
    LoopInitiator expTrialLoop loopType="TrialHandler"
      Selected rows = $[2,3,4,5,6,7,8,9,10,11]
      conditionsFile = $conditionExp
      loopType = random
      nReps = 1
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      Routine trialExp
    LoopTerminator expTrialLoop
  LoopTerminator expTarLoop
  Routine syllablePracIns
  LoopInitiator sylPracLoop loopType="TrialHandler"
    conditionsFile = $conditionSylPrac
    loopType = random
    nReps = 1
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    Routine syllablePracTrial
  LoopTerminator sylPracLoop
  Routine syllableExpIns
  LoopInitiator syllableLoop loopType="TrialHandler"
    conditionsFile = $conditionSylExp
    loopType = random
    nReps = 1
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    Routine trialSyllable
  LoopTerminator syllableLoop
  Routine thankYou
